PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'sex': '001', 'age': '', '': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[0.992,0.992,0.992]
  expName = reactive_intentional_encoding
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Routines
  Routine trial
    ImageComponent a_image
      image [set every frame] = $image_a
      pos = (-0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 2
      stopVal [duration (s)] = .5
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    ImageComponent b_image
      image [set every repeat] = $image_b
      pos = (.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 2
      stopVal [duration (s)] = .5
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    TextComponent text_12
      color = black
      font = Helvetica
      letterHeight = 0.03
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
      text = Remember the image pairs
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  Routine test
    TextComponent instruct_text
      color = black
      letterHeight = 0.1
      pos = (0, .4)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      text = Retrieve the associate
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    ImageComponent a_image_retrieve
      image [set every frame] = $image_a
      pos = (-.5, -.1)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
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    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 2
      stopVal [duration (s)] = .5
      text = +
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    ImageComponent correct_pair
      image [set every frame] = $image_correct
      size = (0.5, 0.5)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 3
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    TextComponent afc_text
      color = black
      letterHeight = 0.05
      pos = (0, 3)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 3
      text = Select the correct image
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    ImageComponent alternative_1
      image [set every frame] = $image_alternative1
      pos = (-.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 3
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    ImageComponent alternative_2
      image [set every frame] = $image_alternative2
      pos = (0, .3)
      size = (0.5, 0.5)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 3
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  Routine feedback
  Routine instructions_01
    TextComponent Instruction_text
      color = black
      font = Helvetica
      letterHeight = 0.03
      startVal [time (s)] = 0.5
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      text [set every frame]:
        Welcome to the memory experiment!
    KeyboardComponent instruction_key_response
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = nothing
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    TextComponent text_3
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos = (0, -0.25)
      startVal [time (s)] = 0.5
      text = Press space to continue
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  Routine instructions_02
    TextComponent Instructions_02
      color [set every frame] = black
      font = Helvetica
      letterHeight = 0.03
      startVal [time (s)] = 0.5
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      text:
        In the first part of this task, you will see two pairs of images, side by side, on the left and right hand side of the computer screen.
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent text_4
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos = (0, -0.25)
      startVal [time (s)] = 0.5
      text = Press space to continue
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  Routine intructions_03
    TextComponent instructions_03
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.5
      text = For example, you might see images similar to the ones below.
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    ImageComponent image
      image [set every frame] = instruction_images/oldBook.png
      pos = (.3, -0.05)
      size = (0.5,0.5)
      startVal [time (s)] = 0.5
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    ImageComponent image_2
      image [set every frame] = instruction_images/jessica_alba.jpg
      pos = (-.3, -0.05)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent text_5
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.5
      text = Press space to continue
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  Routine instructions_04
    ImageComponent image_3
      image [set every frame] = instruction_images/oldBook.png
      pos = (.3, -0.05)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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    ImageComponent image_4
      image = instruction_images/jessica_alba.jpg
      pos = (-.3, -0.05)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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    TextComponent text_6
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos = (0, .3)
      startVal [time (s)] = 0.5
      text = Your job is to try to remember that these images go together. You can create a story to link them together in your memory.
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextComponent text_7
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos = (0, -.4)
      startVal [time (s)] = 0.5
      text = Press space to continue
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  Routine instructions_05
    ImageComponent image_5
      image = instruction_images/oldBook.png
      pos = (.3, -0.05)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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    ImageComponent image_6
      image = instruction_images/jessica_alba.jpg
      pos = (-.3, -0.05)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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    TextComponent text_8
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos = (0, -.4)
      startVal [time (s)] = 0.5
      text = Press space bar to continue!
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    TextComponent text_9
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos = (0, 0.3)
      startVal [time (s)] = 0.5
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      text:
        It's important that you try to remember the pairs of images go together because your memory will later be tested.
    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine Instruction_06
    TextComponent text_10
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos = (0, .3)
      startVal [time (s)] = 0.5
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      text:
        Get ready! Each pair of images will only last on the screen for a few sceonds, so pay attention!
    TextComponent text_11
      color = black
      font = Helvetica
      letterHeight = 0.03
      pos = (0, -0.4)
      startVal [time (s)] = 0.5
      text = Press space bar when you're ready to start the game!
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    ImageComponent image_7
      image [set every frame] = instruction_images/oldBook.png
      pos = (.3, -0.05)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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    ImageComponent image_8
      image = instruction_images/jessica_alba.jpg
      pos = (-.3, -0.05)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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Flow
  Routine instructions_01
  Routine instructions_02
  Routine intructions_03
  Routine instructions_04
  Routine instructions_05
  Routine Instruction_06
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:12
    conditionsFile = intentional_encoding.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trial', 1), ('image_a', 'images/flipflopsBlue.png'), ('image_b', 'images/amy_poehler_c.jpg'), ('category_b', 'face'), ('location_a', 'left'), ('Location_b', 'right')]),
      OrderedDict([('trial', 2), ('image_a', 'images/bag_gift.png'), ('image_b', 'images/bill_gates_a.jpg'), ('category_b', 'face'), ('location_a', 'left'), ('Location_b', 'right')]),
      OrderedDict([('trial', 3), ('image_a', 'images/ball_8.png'), ('image_b', 'images/courtney_cox_c.jpg'), ('category_b', 'face'), ('location_a', 'left'), ('Location_b', 'right')]),
      OrderedDict([('trial', 4), ('image_a', 'images/ball_baseball.png'), ('image_b', 'images/dakota_fanning_c.jpg'), ('category_b', 'face'), ('location_a', 'left'), ('Location_b', 'right')]),
      OrderedDict([('trial', 5), ('image_a', 'images/balloon.jpg'), ('image_b', 'images/drew_barrymore_c.jpg'), ('category_b', 'face'), ('location_a', 'left'), ('Location_b', 'right')]),
      OrderedDict([('trial', 6), ('image_a', 'images/bandage.jpg'), ('image_b', 'images/ellen_degeneres_b.jpg'), ('category_b', 'face'), ('location_a', 'left'), ('Location_b', 'right')]),
      OrderedDict([('trial', 7), ('image_a', 'images/barrel.jpg'), ('image_b', 'images/emma_stone.jpg'), ('category_b', 'face'), ('location_a', 'left'), ('Location_b', 'right')]),
      OrderedDict([('trial', 8), ('image_a', 'images/bathrobe.png'), ('image_b', 'images/emma_watson.jpg'), ('category_b', 'face'), ('location_a', 'left'), ('Location_b', 'right')])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
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = 0:12
    loopType = random
    nReps = 1
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  LoopTerminator trials_2
  LoopInitiator trials_3 loopType="TrialHandler"
    Selected rows = 0:12
    conditionsFile = test_encoding.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('trial', 1), ('image_a', 'images/flipflopsBlue.png'), ('image_correct', 'images/amy_poehler_c.jpg'), ('image_alternative1', 'images/amy_poehler_c.jpg'), ('image_alternative2', 'images/amy_poehler_c.jpg'), ('category_b', 'face')]),
      OrderedDict([('trial', 2), ('image_a', 'images/bag_gift.png'), ('image_correct', 'images/bill_gates_a.jpg'), ('image_alternative1', 'images/bill_gates_a.jpg'), ('image_alternative2', 'images/bill_gates_a.jpg'), ('category_b', 'face')]),
      OrderedDict([('trial', 3), ('image_a', 'images/ball_8.png'), ('image_correct', 'images/courtney_cox_c.jpg'), ('image_alternative1', 'images/courtney_cox_c.jpg'), ('image_alternative2', 'images/courtney_cox_c.jpg'), ('category_b', 'face')]),
      OrderedDict([('trial', 4), ('image_a', 'images/ball_baseball.png'), ('image_correct', 'images/dakota_fanning_c.jpg'), ('image_alternative1', 'images/dakota_fanning_c.jpg'), ('image_alternative2', 'images/dakota_fanning_c.jpg'), ('category_b', 'face')]),
      OrderedDict([('trial', 5), ('image_a', 'images/balloon.jpg'), ('image_correct', 'images/drew_barrymore_c.jpg'), ('image_alternative1', 'images/drew_barrymore_c.jpg'), ('image_alternative2', 'images/drew_barrymore_c.jpg'), ('category_b', 'face')]),
      OrderedDict([('trial', 6), ('image_a', 'images/bandage.jpg'), ('image_correct', 'images/ellen_degeneres_b.jpg'), ('image_alternative1', 'images/ellen_degeneres_b.jpg'), ('image_alternative2', 'images/ellen_degeneres_b.jpg'), ('category_b', 'face')])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
    Routine test
  LoopTerminator trials_3
